/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io":
    {
        "footpedals": "io/sawRobotIO1394-MTML-foot-pedals.xml"
    },
    "arms":
    [
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "26782",
            "base-frame": {
                "reference-frame": "ECM",
                "transform":    [[  -0.9575572771,  -0.1482160908, -0.2472166085, -0.20],
                                 [  -0.1976926041,   0.9618595006,  0.1890606660,  0.0 ],
                                 [  0.2097658107,    0.2299093117, -0.9503367893,  0.0 ],
                                 [  0.0,             0.0,           0.0,           1.0 ]]
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "81503",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0  ]]
            }
        }
    ]
    ,

    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM1"
        }
    ]
}
