/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "io/sawRobotIO1394-MTML-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ",
            "simulation": "KINEMATIC",
            "kinematic": "arm/suj-simulated.json",
            "base-frame": {
                "component": "ECM",
                "interface": "Robot"
            }
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "26782",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM3",
            "type": "PSM",
            "serial": "25389",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM2"
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "37059",
            "base-frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "81503",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,         -0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "76673",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTML",
            "psm": "PSM3",
            "psm-base-frame": {
                "component": "ECM",
                "interface": "Robot"
            }
        }
        ,
        {
            "mtm": "MTMR",
            "psm": "PSM1",
            "psm-base-frame": {
                "component": "ECM",
                "interface": "Robot"
            }
        }
    ]
    ,
    "ecm-teleop":
    {
        "mtm-left": "MTML",
        "mtm-right": "MTMR",
        "ecm": "ECM"
    }
}
